CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain "-1")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it. Note: we choose color type as color image (because the images consists of multiple greyscale channels, the the question mark)']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split the multiple channels and name each channel']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
    Select the input image:original
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:AF488
    Channel number:3
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    Image name:AF568

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1.08
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ImageMath:[module_num:7|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GreenAndRed
    Image or measurement?:Image
    Select the first image:AF488
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:AF568
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:WholeCell
    Select the method to identify the secondary objects:Propagation
    Select the input image:GreenAndRed
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskImage:[module_num:9|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notes:['Mask the AF488 image using the nuclei objects.']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
    Select the input image:AF488
    Name the output image:MaskedAF488_N
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:10|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
    Select the input image:AF488
    Name the output image:MaskedAF488_N_Invert
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

MaskImage:[module_num:11|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
    Select the input image:MaskedAF488_N_Invert
    Name the output image:MaskedAF488_Cyto
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeCell
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:12|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Select images to measure:MaskedAF488_N
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:MaskedAF488_Cyto
    Select objects to measure:WholeCell

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:Nuclei, WholeCell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:15|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notes:["Establish a parent-child between the foci (‘children') and the nuclei (‘parents') in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus."]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
    Parent objects:WholeCell
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
GrayToColor:[module_num:16|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notes:['Composite the images from two channels']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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:2
    Image name:MaskedAF488_N_Invert
    Color:#00F600
    Weight:1.0
    Image name:MaskedAF488_N
    Color:#00EEF6
    Weight:1.0

OverlayOutlines:[module_num:17|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notes:['Overlay the outlines for the objectives of two channels']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00F600
    Select objects to display:WholeCell
    Select outline color:#FFFFFF
    Select objects to display:Nuclei

SaveImages:[module_num:18|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notes:['Save the overlay images ']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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:19|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Run2_
    Overwrite existing files without warning?:No
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